PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = stroop
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruction
    TextComponent instrText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Remember, choose the color of the letters, ignoring the word:


        left = red
        down = green
        right = blue
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('congruent', 1), ('corrAns', 'left')]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('congruent', 1), ('corrAns', 'down')]),
      OrderedDict([('word', 'green'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('congruent', 1), ('corrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('colour', 'red'), ('congruent', 0), ('corrAns', 'left')])]
    Routine trial
  LoopTerminator trials
